PsychoPy2experiment version="2021.1.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = LieDetection
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Routines
  Routine Start
    TextComponent text
      letterHeight = 0.08
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Wellcome!

        This is an experiement about lie detection.

        Press 'space' to continue
    KeyboardComponent key_resp
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine Baseline
    TextComponent fixation_cross
      color = black
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = +
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  Routine NumberTest
    TextComponent question_1
      letterHeight = 0.05
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = Is the displayed number greater than 10?
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    TextComponent press_key
      languageStyle = RTL
      letterHeight = 0.05
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = "←" No         Yes "→" 
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    TextComponent num_test
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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    CodeComponent number_genertion
      Code Type = Auto->JS
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      Begin Experiment:
        import random
      Begin Routine:
        # generate a random number to be displayed which is not 10
        #num = 10
        corResp = ''
        #while num == 10:
        #    num = random.randint(0,20)

        # select number from list generated in the introduction
        num = numbers_rand[trials_num.thisN]

        # write generated number to data
        thisExp.addData('num_test.value', num)

        # generate correct response (always truth)
        if num > 10:
            corResp = 'right'
        else:
            corResp = 'left'

        num_test.text = str(num)
      End Routine:
        # if trials max is 20 end early
        if trials_num.thisN >= (trials_limit-1):
            trials_num.finished = True
    PolygonComponent timer_line
      fillColor = white
      lineWidth = 10
      pos = (0, -0.35)
      saveStartStop = False
      shape = line
      size = (1,0.02)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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    CodeComponent timer
      Code Type = Auto->JS
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      Begin Experiment:
        import time
        import sys
        from psychopy import event
      Begin Routine:
        # configure visual timer
        time = 5
        timer = core.CountdownTimer(time)

        # size of line
        timer_line.size = [1,0.02]
        width = timer_line.size[0]

        # how much the line shrinks each frame
        dist = width/(60.5*time)
        timer_line.autoDraw= False
      Each Frame:
        while timer.getTime() > 0 and continueRoutine:
            # adjust line size to visualize time
            width -= dist
            timer_line.size = [width,0.02]
            timer_line.draw()

            # check if response was given
            keys = event.getKeys()
            if keys:
                if 'right' in keys:
                    continueRoutine = False
                if 'left' in keys:
                    continueRoutine = False

            win.flip()
    KeyboardComponent arrow_response
      allowedKeys = 'left','right'
      correctAns = $corResp
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 5.0
      storeCorrect = True
      syncScreenRefresh = False
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  Routine Instructions
    TextComponent instructions_text
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        In the following, you will be asked if the number in the middle is greater than 10.

        Please always lie!

        Press 'space' to start
    KeyboardComponent instructions_space
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    CodeComponent instructions_code
      Code Type = Auto->JS
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      Begin Experiment:
        # here you can change the order in
        # which they should lie, tell truth or choose

        # lie = 0, truth = 1, choorse = 2

        order = [2, 1, 0]

        # generates list with len 20, 10 ints < 10, 10 ints > 10
        def gen_rand_list():
            # list len 10, random num from 11 to 19
            randomlist_1 = random.sample(range(11, 19), 5)
            randomlist_1.extend(random.sample(range(11, 19), 5))
            #list len 10, random num from 1 to 9
            randomlist_2 = random.sample(range(1, 9), 5)
            randomlist_2.extend(random.sample(range(1, 9), 5))

            randomlist_1.extend(randomlist_2)
            return randomlist_1
      Begin Routine:
        # depending on the oder decided in the beginning
        # edit the displayed text and write to output file
        numbers_rand =[]
        trials_limit = 20
        if order[trials_instruct_num.thisN] == 0:
            instructions_text.text  = "In the following, you will be asked if the number in the middle is greater than 10.\n \nPlease always lie! \n \nPress 'space' to start"
            thisExp.addData('numbers.instructions', 'lie')
            numbers_rand = gen_rand_list()
        if order[trials_instruct_num.thisN] == 1:
            instructions_text.text  = "In the following, you will be asked if the number in the middle is greater than 10.\n \nPlease always tell the truth! \n \nPress 'space' to start"
            thisExp.addData('numbers.instructions', 'truth')
            numbers_rand = gen_rand_list()
        if order[trials_instruct_num.thisN] == 2:
            instructions_text.text  = "In the following, you will be asked if the number in the middle is greater than 10.\n \nYou can choose to lie or tell the truth! \n \nPress 'space' to start"
            thisExp.addData('numbers.instructions', 'choice')
            numbers_rand = gen_rand_list()
            numbers_rand. extend(gen_rand_list())
            trials_limit = 40

        # randomize numbers
        random.shuffle(numbers_rand)
        print(numbers_rand)
  Routine Instructions_Quest
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    TextComponent instructions_text2
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent code_quest
      Code Type = Auto->JS
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      Before Experiment:
        import csv
        # function to read in csv files
        def read_csv(filename, delim):
            questions = []
            with open(filename) as csv_file:
                csv_reader = csv.reader(csv_file, delimiter=delim)
                line_count = 0
                for row in csv_reader:
                    if line_count == 0:
                        line_count += 1
                    else:
                        questions.append([int(row[0]),str(row[1])])
                        line_count += 1
            return questions
      Begin Experiment:
        # here you can change the order in
        # which they should lie, tell truth or choose

        # lie = 0, truth = 1, choorse = 2

        order = [2, 1, 0]

        # read in the csv for questions and randomize order of questions
        questions = []

        questions_emo = read_csv('Question_emotional.csv', ',')
        questions_neu = read_csv('Question_neutral.csv', ';')

        # pick questions for lie and truth
        #pick_emo = pick_quest()
        #pick_neu = pick_quest()
        # shuffle questions and then pick first 10 from each for lie
        # and last 10 for truth
        random.shuffle(questions_emo)
        random.shuffle(questions_neu)

        questions_lie = questions_emo[0:10]
        questions_lie.extend(questions_neu[0:10])

        questions_truth = questions_emo[10:20]
        questions_truth.extend(questions_neu[10:20])

        questions_choice = questions_emo.copy()
        questions_choice.extend(questions_neu[:])

        print('lie')
        print(len(questions_lie))
        print('truth')
        print(len(questions_truth))
        print('chioce')
        print(len(questions_choice))
        """
        def pick_quest():
            picks = []
            while len(picks) < 10:
                i = random.range(0,19)
                if i not in picks:
                    picks.append(i)
             return picks

        questions_lie = []
        questions_truth = []
        questions_choice = []
        with open('sample_questions_lie.csv') as csv_file:
            csv_reader = csv.reader(csv_file, delimiter=',')
            line_count = 0
            for row in csv_reader:
                if line_count == 0:
                    line_count += 1
                else:
                    questions_lie.append([int(row[0]),str(row[1])])
                    line_count += 1

        with open('sample_questions_truth.csv') as csv_file:
            csv_reader = csv.reader(csv_file, delimiter=',')
            line_count = 0
            for row in csv_reader:
                if line_count == 0:
                    line_count += 1
                else:
                    questions_truth.append([int(row[0]),str(row[1])])
                    line_count += 1

        with open('sample_questions_choice.csv') as csv_file:
            csv_reader = csv.reader(csv_file, delimiter=',')
            line_count = 0
            for row in csv_reader:
                if line_count == 0:
                    line_count += 1
                else:
                    questions_choice.append([int(row[0]),str(row[1])])
                    line_count += 1

        #questions = random.shuffle(questions_lie)
        #print(questions_lie)
        #print(questions_truth)
        #print(questions_choice) """
      Begin Routine:
        # depending on the oder decided in the beginning
        # edit the displayed text and write to output file

        trials_limit = 20
        if order[trials_instruct_quest.thisN] == 0:
            instructions_text2.text  = "In the following, you will be asked personal questions.\n \nPlease always lie! \n \nPress 'space' to start"
            thisExp.addData('questions.instructions', 'lie')
            questions = questions_lie.copy()
        if order[trials_instruct_quest.thisN] == 1:
            instructions_text2.text  = "In the following, you will be asked personal questions.\n \nPlease always tell the truth! \n \nPress 'space' to start"
            thisExp.addData('questions.instructions', 'truth')
            questions = questions_truth.copy()
        if order[trials_instruct_quest.thisN] == 2:
            instructions_text2.text  = "In the following, you will be asked personal questions.\n \nYou can choose to lie or tell the truth! \n \nPress 'space' to start"
            thisExp.addData('questions.instructions', 'choice')
            questions = questions_choice.copy()
            trials_limit = 40

        random.shuffle(questions)
        #print(questions)
  Routine QuestionsTest
    TextComponent press_key2
      letterHeight = 0.05
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
      text = "←" No         Yes "→" 
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    TextComponent question
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
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    CodeComponent select_question
      Code Type = Auto->JS
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      Begin Routine:
        # get question to display on screen
        num_quest = trials_quest.thisN
        question.text = str(questions[num_quest][1])

        # write selected question to data
        thisExp.addData('question.id', questions[num_quest][0])
    KeyboardComponent question_response
      allowedKeys = 'left','right'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 10.0
      syncScreenRefresh = False
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    PolygonComponent timer_line2
      fillColor = white
      lineWidth = 10
      pos = (0, -0.35)
      saveStartStop = False
      shape = line
      size = (1,0.02)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
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    CodeComponent timer_2
      Code Type = Auto->JS
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      Begin Routine:
        continueRoutine = True
        # configure visual timer
        time = 10
        timer = core.CountdownTimer(time)

        # size of line
        timer_line2.size = [1,0.02]
        width = timer_line2.size[0]

        # how much the line shrinks each frame
        dist = width/(60.5*time)
        timer_line2.autoDraw= False
      Each Frame:
        while timer.getTime() > 0 and continueRoutine:
            # adjust line size to visualize time
            width -= dist
            timer_line2.size = [width,0.02]
            timer_line2.draw()

            # check if response was given
            keys = event.getKeys()
            if keys:
                if 'right' in keys:
                    continueRoutine = False
                if 'left' in keys:
                    continueRoutine = False

            win.flip()
      End Routine:
        # if trials max is 20 end early
        if trials_quest.thisN >= (trials_limit-1):
            trials_quest.finished = True
  Routine End
    TextComponent end
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = Thank you for participating!
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Flow
  Routine Start
  LoopInitiator trials_instruct_num loopType="TrialHandler"
    loopType = sequential
    nReps = 3
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    Routine Instructions
    LoopInitiator trials_num loopType="TrialHandler"
      loopType = sequential
      nReps = 40
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      Routine Baseline
      Routine NumberTest
    LoopTerminator trials_num
  LoopTerminator trials_instruct_num
  LoopInitiator trials_instruct_quest loopType="TrialHandler"
    loopType = sequential
    nReps = 3
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    Routine Instructions_Quest
    LoopInitiator trials_quest loopType="TrialHandler"
      loopType = sequential
      nReps = 40
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      Routine Baseline
      Routine QuestionsTest
    LoopTerminator trials_quest
  LoopTerminator trials_instruct_quest
  Routine End
